WorkflowBuilder(Version=2.9.1)
GroupWorkflow HARP
    SubscribeSubject SessionSettings
    -> MemberSelector(Selector=HardwarePorts.BehaviorBoard)
    -> PropertyMapping(PortName)
    -> GroupWorkflow Behavior
        BehaviorSubject<Bonsai.Harp.HarpMessage> BehaviorCommands
        -> RateLimiter(MessageDelay=PT0.005S) => #1
        ExternalizedMapping(PortName) => #2
        #1, #2 -> Harp.Behavior.Device(OperationMode=Active, OperationLed=On, DumpRegisters=true, VisualIndicators=On, Heartbeat=Enabled, IgnoreErrors=false, PortName=COM14)
        -> PublishSubject BehaviorEvents => #4
        -> WorkflowOutput
        #4 -> Last
        -> Bonsai.Scripting.Expressions.ExpressionTransform
          Expression: Convert.ToString(it)
        -> PublishSubject BehaviorNotifications

        BooleanProperty(Value=false)
        -> BehaviorSubject CurrentSampleState

        SubscribeSubject BehaviorEvents
        -> Harp.Behavior.Parse(Register=Harp.Behavior.PortDIOStateEvent) => #12
        -> BitwiseAnd(Operand=WorkflowProperty<Harp.Behavior.PortDigitalIOS>(Value=DIO1))
        -> DistinctUntilChanged
        -> PublishSubject DI0
        #12 -> BitwiseAnd(Operand=WorkflowProperty<Harp.Behavior.PortDigitalIOS>(Value=DIO2))
        -> DistinctUntilChanged
        -> PublishSubject DI1

        SubscribeSubject BehaviorEvents
        -> Harp.Behavior.Parse(Register=Harp.Behavior.TimestampedDigitalInputState) => #20
        -> MemberSelector(Selector=Value)
        -> BitwiseAnd(Operand=WorkflowProperty<Harp.Behavior.DigitalInputs>(Value=DIPort0)) => #22
        #20 -> MemberSelector(Selector=Seconds) => #23
        #22, #23 -> Zip
        -> Bonsai.Harp.CreateTimestamped
        -> DistinctUntilChanged => #26
        -> Condition Onset
            WorkflowInput Source1
            -> MemberSelector(Selector=Value)
            -> Equal(Operand=WorkflowProperty<System.Byte>(Value=1))
            -> WorkflowOutput
        -> PublishSubject SampleOnset
        #26 -> Condition Offset
            WorkflowInput Source1
            -> MemberSelector(Selector=Value)
            -> Equal(Operand=WorkflowProperty<System.Byte>(Value=0))
            -> WorkflowOutput
        -> PublishSubject SampleOffset

        SubscribeSubject BehaviorEvents
        -> Harp.Behavior.Parse(Register=Harp.Behavior.DigitalInputState)
        -> BitwiseAnd(Operand=WorkflowProperty<Harp.Behavior.DigitalInputs>(Value=DIPort1))
        -> Equal(Operand=WorkflowProperty<System.Byte>(Value=2))
        -> Condition
            WorkflowInput Source1
            -> WorkflowOutput
        -> PublishSubject RewardPort0

        SubscribeSubject BehaviorEvents
        -> Harp.Behavior.Parse(Register=Harp.Behavior.DigitalInputState)
        -> BitwiseAnd(Operand=WorkflowProperty<Harp.Behavior.DigitalInputs>(Value=DIPort2))
        -> Equal(Operand=WorkflowProperty<System.Byte>(Value=4))
        -> Condition
            WorkflowInput Source1
            -> WorkflowOutput
        -> PublishSubject RewardPort1

        Harp.Behavior.CreateMessage(MessageType=Write, Payload=Harp.Behavior.CreateOutputPulseEnablePayload(OutputPulseEnable=SupplyPort1)) => #43
        Harp.Behavior.CreateMessage(MessageType=Write, Payload=Harp.Behavior.CreateOutputPulseEnablePayload(OutputPulseEnable=SupplyPort2)) => #44
        Harp.Behavior.CreateMessage(MessageType=Write, Payload=Harp.Behavior.CreateOutputClearPayload(OutputClear="DOPort0 DOPort1 DOPort2")) => #45
        Harp.Behavior.CreateMessage(MessageType=Write, Payload=Harp.Behavior.CreateEventEnablePayload(EventEnable="PortDI PortDIO AnalogData Camera0")) => #46
        Harp.Behavior.CreateMessage(MessageType=Write, Payload=Harp.Behavior.CreatePokeInputFilterPayload(PokeInputFilter=30)) => #47
        #43, #44, #45, #46, #47 -> Merge
        -> MulticastSubject BehaviorCommands

        BehaviorSubject<DataSchema.RewardCommand> RewardCommand
        -> SelectMany Reward
            WorkflowInput Source1
            -> Take(Count=1)
            -> AsyncSubject Command

            SubscribeSubject Command
            -> Condition RewardLocation1 => #4
                WorkflowInput Source1
                -> MemberSelector(Selector=RewardPosition)
                -> Equal(Operand=IntProperty(Value=0))
                -> WorkflowOutput
            SubscribeSubject Command
            -> MemberSelector(Selector=RewardTime)
            -> Multiply(Operand=DoubleProperty(Value=1000))
            -> PropertyMapping(PulseSupplyPort1) => #8
            #4, #8 -> Harp.Behavior.CreateMessage(MessageType=Write, Payload=Harp.Behavior.CreatePulseSupplyPort1Payload(PulseSupplyPort1=238))
            -> MulticastSubject BehaviorCommands
            -> Harp.Behavior.CreateMessage(MessageType=Write, Payload=Harp.Behavior.CreateOutputSetPayload(OutputSet=SupplyPort1))
            -> MulticastSubject BehaviorCommands => #12
            SubscribeSubject Command
            -> Condition RewardLocation2 => #14
                WorkflowInput Source1
                -> MemberSelector(Selector=RewardPosition)
                -> Equal(Operand=IntProperty(Value=1))
                -> WorkflowOutput
            SubscribeSubject Command
            -> MemberSelector(Selector=RewardTime)
            -> Multiply(Operand=DoubleProperty(Value=1000))
            -> PropertyMapping(PulseSupplyPort2) => #18
            #14, #18 -> Harp.Behavior.CreateMessage(MessageType=Write, Payload=Harp.Behavior.CreatePulseSupplyPort2Payload(PulseSupplyPort2=238))
            -> MulticastSubject BehaviorCommands
            -> Harp.Behavior.CreateMessage(MessageType=Write, Payload=Harp.Behavior.CreateOutputSetPayload(OutputSet=SupplyPort2))
            -> MulticastSubject BehaviorCommands => #22
            #12, #22 -> Merge
            -> Take(Count=1)
            -> WorkflowOutput

    SubscribeSubject SessionSettings
    -> MemberSelector(Selector=HardwarePorts.Olfactometer0)
    -> PropertyMapping(PortO0) => #6
    SubscribeSubject SessionSettings
    -> MemberSelector(Selector=HardwarePorts.Olfactometer1)
    -> PropertyMapping(PortO1) => #9
    #6, #9 -> IncludeWorkflow
      Path=Extensions\Olfactometer.bonsai
      PortO0=COM5
      EventsO0=EventsO0
      PortO1=COM7
      EventsO1=EventsO1
      OlfactometerEvents=OlfactometerEvents
      SessionSettings=SessionSettings
      OlfactometerCommand=OlfactometerCommand

GroupWorkflow Logging
    SubscribeSubject SessionSettings
    -> MemberSelector(Selector=Metadata.LoggingRootPath)
    -> PropertyMapping(Path)
    -> IncludeWorkflow(Path=Aeon.Acquisition:LogController.bonsai, Path=C:\hypnose\rawdata\sub-066_id-427\ses-048_date-20260925\behav, ChunkSize=1)

    SubscribeSubject SessionSettings => #4
    SubscribeSubject BehaviorEvents => #5
    #4, #5 -> SubscribeWhen
    -> IncludeWorkflow BehaviorEvents(Path=Bonsai.Harp:WithLatestTimestamp.bonsai)
    -> IncludeWorkflow(Path=Aeon.Acquisition:LogJson.bonsai, Heartbeats="", ClosingDuration=nil, LogName=SessionSettings)
    -> Take(Count=1)

    SubscribeSubject CurrentSequences => #10
    SubscribeSubject BehaviorEvents => #11
    #10, #11 -> SubscribeWhen
    -> IncludeWorkflow BehaviorEvents(Path=Bonsai.Harp:WithLatestTimestamp.bonsai)
    -> IncludeWorkflow(Path=Aeon.Acquisition:LogJson.bonsai, Heartbeats="", ClosingDuration=nil, LogName=Schema)
    -> Take(Count=1)

    SubscribeSubject EegStream
    -> IncludeWorkflow BehaviorEvents(Path=Bonsai.Harp:WithLatestTimestamp.bonsai)
    -> IncludeWorkflow(Path=Aeon.Acquisition:LogData.bonsai, Heartbeats=BehaviorEvents, ClosingDuration=nil, LogName=EegStreamEvents, Selector=nil)

    SubscribeSubject EventsO0
    -> IncludeWorkflow(Path=Aeon.Acquisition:LogHarpState.bonsai, LogName=Olfactometer0, Heartbeats=BehaviorEvents, ClosingDuration=nil)

    SubscribeSubject EventsO1
    -> IncludeWorkflow(Path=Aeon.Acquisition:LogHarpState.bonsai, LogName=Olfactometer1, Heartbeats=BehaviorEvents, ClosingDuration=nil)

    SubscribeSubject BehaviorEvents
    -> IncludeWorkflow(Path=Aeon.Acquisition:LogHarpState.bonsai, LogName=Behavior, Heartbeats=BehaviorEvents, ClosingDuration=nil)

    SubscribeSubject ExperimentEvents
    -> IncludeWorkflow BehaviorEvents(Path=Bonsai.Harp:WithLatestTimestamp.bonsai)
    -> IncludeWorkflow(Path=Aeon.Acquisition:LogData.bonsai, Heartbeats=BehaviorEvents, ClosingDuration=nil, LogName=ExperimentEvents, Selector=nil)

    SubscribeSubject BehaviorCommands
    -> IncludeWorkflow BehaviorEvents(Path=Bonsai.Harp:WithLatestTimestamp.bonsai)
    -> IncludeWorkflow(Path=Aeon.Acquisition:LogData.bonsai, Heartbeats=BehaviorEvents, ClosingDuration=nil, LogName=BehaviorCommands, Selector=nil)

    SubscribeSubject CameraStream => #31
    SubscribeSubject SessionSettings
    -> MemberSelector(Selector=CameraProperties.FrameRate)
    -> PropertyMapping(FrameRate) => #34
    #31, #34 -> IncludeWorkflow(Path=Aeon.Video:LogVideo.bonsai, Heartbeats=BehaviorEvents, ClosingDuration=nil, LogName=VideoData, FrameRate=60)

    SubscribeSubject BehaviorNotifications
    -> IncludeWorkflow BehaviorEvents(Path=Bonsai.Harp:WithLatestTimestamp.bonsai)
    -> IncludeWorkflow(Path=Aeon.Acquisition:LogData.bonsai, Heartbeats=BehaviorEvents, ClosingDuration=nil, LogName=BehaviorNotifications, Selector=nil)

    SubscribeSubject DetectedObject
    -> IncludeWorkflow BehaviorEvents(Path=Bonsai.Harp:WithLatestTimestamp.bonsai)
    -> IncludeWorkflow(Path=Aeon.Acquisition:LogData.bonsai, Heartbeats=BehaviorEvents, ClosingDuration=nil, LogName=DetectedObject, Selector=nil)

GroupWorkflow Camera
    GroupWorkflow Tracking
        SubscribeSubject CameraStream
        -> MemberSelector(Selector=Value.Image)
        -> Bonsai.Vision.Grayscale => #2
        SubscribeSubject SessionSettings
        -> MemberSelector(Selector=CameraProperties.BinaryThreshold)
        -> PropertyMapping(ThresholdValue) => #5
        #2, #5 -> Bonsai.Vision.Threshold(ThresholdValue=110, MaxValue=255, ThresholdType=BinaryInv) => #6
        SubscribeSubject SessionSettings
        -> MemberSelector(Selector=CameraProperties)
        -> MemberSelector(Selector=RoiSourcePoints)
        -> MemberSelector(Selector=Points)
        -> ConvertPoints
        -> PropertyMapping(Regions) => #12
        #6, #12 -> Bonsai.Vision.RoiActivity(Regions(ArrayOfPoint(Point(X=240, Y=650), Point(X=240, Y=750), Point(X=1070, Y=750), Point(X=1070, Y=650))), Operation=Sum)
        -> Index(Operand=IntProperty(Value=0))
        -> MemberSelector(Selector=Activity.Val0)
        -> Take(Count=15)
        -> Average
        -> Repeat
        -> BehaviorSubject RoiMovingAverage

        SubscribeSubject CameraStream
        -> MemberSelector(Selector=Value.Image)
        -> Bonsai.Vision.Grayscale => #22
        SubscribeSubject SessionSettings
        -> MemberSelector(Selector=CameraProperties.BinaryThreshold)
        -> PropertyMapping(ThresholdValue) => #25
        #22, #25 -> Bonsai.Vision.Threshold(ThresholdValue=110, MaxValue=255, ThresholdType=BinaryInv) => #26
        SubscribeSubject SessionSettings
        -> MemberSelector(Selector=CameraProperties)
        -> MemberSelector(Selector=RoiSourcePoints)
        -> MemberSelector(Selector=Points)
        -> ConvertPoints
        -> PropertyMapping(Regions) => #32
        #26, #32 -> Bonsai.Vision.RoiActivity(Regions(ArrayOfPoint(Point(X=240, Y=650), Point(X=240, Y=750), Point(X=1070, Y=750), Point(X=1070, Y=650))), Operation=Sum)
        -> Index(Operand=IntProperty(Value=0))
        -> MemberSelector(Selector=Activity.Val0)
        -> BehaviorSubject RoiIntensity

        SubscribeSubject RoiIntensity => #37
        SubscribeSubject RoiMovingAverage => #38
        #37, #38 -> WithLatestFrom
        -> Divide => #40
        SubscribeSubject SessionSettings
        -> MemberSelector(Selector=CameraProperties)
        -> MemberSelector(Selector=Threshold)
        -> PropertyMapping(Value) => #44
        #40, #44 -> GreaterThan(Operand=DoubleProperty(Value=5))
        -> PublishSubject DetectedObject

    SubscribeSubject SessionSettings
    -> MemberSelector(Selector=CameraProperties.CameraId)
    -> PropertyMapping(CameraSerialNumber)
    -> GroupWorkflow CameraSettings
        SubscribeSubject BehaviorEvents
        -> Harp.Behavior.Parse(Register=Harp.Behavior.TimestampedCamera0Frame)
        -> Condition FrameEvent => #2
            WorkflowInput Source1
            -> MemberSelector(Selector=Value)
            -> BitwiseAnd(Operand=WorkflowProperty<Harp.Behavior.FrameAcquired>(Value=FrameAcquired))
            -> GreaterThan(Operand=WorkflowProperty<System.Byte>(Value=0))
            -> WorkflowOutput
        SubscribeSubject StartDelay => #3
        #2, #3 -> SubscribeWhen => #4
        ExternalizedMapping(SerialNumber(DisplayName=CameraSerialNumber)) => #5
        SubscribeSubject SessionSettings
        -> MemberSelector(Selector=CameraProperties.Exposure)
        -> PropertyMapping(ExposureTime) => #8
        SubscribeSubject SessionSettings
        -> MemberSelector(Selector=CameraProperties.Gain)
        -> PropertyMapping(Gain) => #11
        #4, #5, #8, #11 -> Aeon.Video.SpinnakerCapture(Index=nil, SerialNumber=24282618, ColorProcessing=Default, ExposureTime=15000, Gain=10, Binning=1, TriggerSource=Line3)
        -> PublishSubject CameraStream
        -> WorkflowOutput

    SubscribeSubject SessionSettings
    -> MemberSelector(Selector=ShortcutKeys.StartCamera)
    -> PropertyMapping(Value)
    -> StringProperty(Value=Alt+1)
    -> StringToKey
    -> PropertyMapping(StartCameraKey)
    -> GroupWorkflow CameraStart
        ExternalizedMapping(Filter(DisplayName=StartCameraKey))
        -> Bonsai.Windows.Input.KeyDown(Filter="LButton ShiftKey ControlKey Space Prior PageUp D0 D1 Alt", SuppressRepetitions=false) => #1
        SubscribeSubject StartDelay => #2
        #1, #2 -> SubscribeWhen => #3
        SubscribeSubject SessionSettings
        -> MemberSelector(Selector=CameraProperties.FrameRate)
        -> PropertyMapping(Camera0Frequency) => #6
        #3, #6 -> Harp.Behavior.CreateMessage(MessageType=Write, Payload=Harp.Behavior.CreateCamera0FrequencyPayload(Camera0Frequency=60))
        -> MulticastSubject BehaviorCommands
        -> Harp.Behavior.CreateMessage(MessageType=Write, Payload=Harp.Behavior.CreateStartCamerasPayload(StartCameras=CameraOutput0))
        -> MulticastSubject BehaviorCommands

GroupWorkflow EEG
    UdpSource(GroupAddress=239.255.76.67, Port=8866)
    -> Condition
        WorkflowInput Source1 => #0
        SubscribeSubject SessionSettings
        -> MemberSelector(Selector=Metadata.EegRecordingEnabled)
        -> PropertyMapping(Value) => #3
        #0, #3 -> BooleanProperty(Value=true)
        -> WorkflowOutput
    -> PublishSubject EegStream
    -> WorkflowOutput

GroupWorkflow OlfactometerPurge
    SubscribeSubject SessionSettings
    -> MemberSelector(Selector=ShortcutKeys.StartOlfactometerPurgeKey)
    -> PropertyMapping(Value)
    -> StringProperty(Value=Shift+1)
    -> StringToKey
    -> PropertyMapping(Filter)
    -> Bonsai.Windows.Input.KeyDown(Filter="LButton ShiftKey ControlKey Space Prior PageUp D0 D1 Shift", SuppressRepetitions=false)
    -> Take(Count=1)
    -> SelectMany OlfactometerValvePurge
        WorkflowInput Source1
        -> StringProperty(Value=OdorA)
        -> MulticastSubject OlfactometerCommand
        -> Delay(DueTime=PT5S)
        -> StringProperty(Value=Purge)
        -> MulticastSubject OlfactometerCommand
        -> Delay(DueTime=PT0.2S)
        -> StringProperty(Value=OdorB)
        -> MulticastSubject OlfactometerCommand
        -> Delay(DueTime=PT5S)
        -> StringProperty(Value=Purge)
        -> MulticastSubject OlfactometerCommand
        -> Delay(DueTime=PT0.2S)
        -> StringProperty(Value=OdorC)
        -> MulticastSubject OlfactometerCommand
        -> Delay(DueTime=PT5S)
        -> StringProperty(Value=Purge)
        -> MulticastSubject OlfactometerCommand
        -> Delay(DueTime=PT0.2S)
        -> StringProperty(Value=OdorD)
        -> MulticastSubject OlfactometerCommand
        -> Delay(DueTime=PT15S)
        -> StringProperty(Value=Purge)
        -> MulticastSubject OlfactometerCommand
        -> Delay(DueTime=PT0.2S)
        -> StringProperty(Value=OdorE)
        -> MulticastSubject OlfactometerCommand
        -> Delay(DueTime=PT5S)
        -> StringProperty(Value=Purge)
        -> MulticastSubject OlfactometerCommand
        -> Delay(DueTime=PT0.2S)
        -> StringProperty(Value=OdorF)
        -> MulticastSubject OlfactometerCommand
        -> Delay(DueTime=PT5S)
        -> StringProperty(Value=Purge)
        -> MulticastSubject OlfactometerCommand
        -> Delay(DueTime=PT0.2S)
        -> StringProperty(Value=OdorG)
        -> MulticastSubject OlfactometerCommand
        -> Delay(DueTime=PT5S)
        -> StringProperty(Value=Purge)
        -> MulticastSubject OlfactometerCommand
        -> Delay(DueTime=PT0.2S)
        -> StringProperty(Value=Default)
        -> MulticastSubject OlfactometerCommand
        -> StringProperty(Value=OlfactometerPurged)
        -> WorkflowOutput
    -> MulticastSubject ExperimentEvents

GroupWorkflow ExperimentProgression
    SubscribeSubject CurrentSequences
    -> Take(Count=1)
    -> MemberSelector(Selector=Sequences)
    -> Merge
    -> CreateObservable SequenceProgression
        WorkflowInput Source1
        -> Take(Count=1)
        -> AsyncSubject SequenceSelections

        SubscribeSubject SequenceSelections
        -> Sink SetDefault
            WorkflowInput Source1
            -> StringProperty(Value=Default)
            -> MulticastSubject OlfactometerCommand
            -> WorkflowOutput
        -> SelectMany ChooseRandomSequence => #5
            WorkflowInput Source1 => #0
            -> UniformSampleList => #1
            #0 -> StringProperty(Value=ChooseRandomSequence)
            -> MulticastSubject ExperimentEvents => #3
            #1, #3 -> Zip
            -> MemberSelector(Selector=Item1)
            -> Take(Count=1)
            -> WorkflowOutput
        -> SelectMany SampleRewardCondition => #6
            WorkflowInput Source1
            -> MemberSelector(Selector=RewardConditions)
            -> Take(Count=1)
            -> AsyncSubject RewardConditions
            -> StringProperty(Value=SampleRewardCondition)
            -> MulticastSubject ExperimentEvents

            SubscribeSubject RandomSource => #6
            SubscribeSubject RewardConditions
            -> MemberSelector(Selector=Count)
            -> Subtract(Operand=IntProperty(Value=1))
            -> PropertyMapping(Upper) => #10
            #6, #10 -> Bonsai.Numerics.Distributions.CreateDiscreteUniform(Lower=0, Upper=0)
            -> Bonsai.Numerics.Distributions.Sample
            -> Take(Count=1)
            -> WorkflowOutput
        #6, #5 -> Zip
        -> SelectMany InitiationSequence => #8
            WorkflowInput Source1
            -> Take(Count=1)
            -> Sink EnableTrialStartIndicator
                WorkflowInput Source1
                -> MemberSelector(Selector=Item2.EnableTrialStartIndicator)
                -> Condition
                    WorkflowInput Source1
                    -> WorkflowOutput
                -> Harp.Behavior.CreateMessage(MessageType=Write, Payload=Harp.Behavior.CreateOutputSetPayload(OutputSet=DOPort0))
                -> MulticastSubject BehaviorCommands
                -> WorkflowOutput
            -> AsyncSubject SequenceInfo
            -> StringProperty(Value=InitiationSequence)
            -> MulticastSubject ExperimentEvents

            SubscribeSubject SequenceInfo => #6
            -> Condition R1
                WorkflowInput Source1
                -> MemberSelector(Selector=Item1)
                -> Equal(Operand=IntProperty(Value=0))
                -> WorkflowOutput
            -> MemberSelector(Selector=Item2.RewardConditions)
            -> Index(Operand=IntProperty(Value=0)) => #9
            #6 -> Condition R2
                WorkflowInput Source1
                -> MemberSelector(Selector=Item1)
                -> Equal(Operand=IntProperty(Value=1))
                -> WorkflowOutput
            -> MemberSelector(Selector=Item2.RewardConditions)
            -> Index(Operand=IntProperty(Value=1)) => #12
            #9, #12 -> Merge => #13
            -> MemberSelector(Selector=Definition)
            -> Merge
            -> UniformSampleList => #16
            #13 -> MemberSelector(Selector=Position) => #17
            #16, #17 -> WithLatestFrom
            -> ElementIndex
            -> CreateObservable PresentStimulus
                WorkflowInput Source1
                -> Take(Count=1)
                -> AsyncSubject Valence
                -> MemberSelector(Selector=Value)
                -> AsyncSubject RawValence

                SubscribeSubject BehaviorEvents => #5
                SubscribeSubject SustainedSampleState
                -> MemberSelector(Selector=Value) => #7
                #5, #7 -> WithLatestFrom
                -> MemberSelector(Selector=Item2)
                -> IncludeWorkflow BehaviorEvents(Path=Bonsai.Harp:WithLatestTimestamp.bonsai)
                -> Take(Count=1)
                -> AsyncSubject AlreadySampling

                SubscribeSubject SustainedSampleOnset => #13
                -> BooleanProperty(Value=true) => #14
                #13 -> MemberSelector(Selector=Seconds) => #15
                #14, #15 -> Zip
                -> Bonsai.Harp.CreateTimestamped => #17
                SubscribeSubject AlreadySampling
                -> Condition AlreadySampling => #19
                    WorkflowInput Source1
                    -> MemberSelector(Selector=Value)
                    -> WorkflowOutput
                #17, #19 -> Merge
                -> Take(Count=1)
                -> AsyncSubject InitiatingOnset

                SubscribeSubject SustainedSampleState
                -> Condition => #24
                    WorkflowInput Source1
                    -> MemberSelector(Selector=Value)
                    -> WorkflowOutput
                SubscribeSubject SustainedSampleOffset
                -> MemberSelector(Selector=Seconds) => #26
                SubscribeSubject InitiatingOnset
                -> MemberSelector(Selector=Seconds) => #28
                #26, #28 -> WithLatestFrom
                -> Subtract
                -> LessThan(Operand=DoubleProperty(Value=0))
                -> Condition => #32
                    WorkflowInput Source1
                    -> WorkflowOutput
                #24, #32 -> WithLatestFrom
                -> MemberSelector(Selector=Item1)
                -> Take(Count=1)
                -> AsyncSubject ReinitiatingOnset
                SubscribeSubject InitiatingOnset => #37
                SubscribeSubject Valence => #38
                #37, #38 -> WithLatestFrom
                -> MemberSelector(Selector=Item2.Value.Item1.Command)
                -> MulticastSubject OlfactometerCommand => #41
                SubscribeSubject Valence
                -> MemberSelector(Selector=Value.Item1.MaximumSamplingTime)
                -> Bonsai.Scripting.Expressions.ExpressionTransform
                  Expression: TimeSpan.FromSeconds(it)
                -> PropertyMapping(DueTime) => #45
                #41, #45 -> Delay(DueTime=PT2S) => #46
                #46, #32 -> TakeUntil => #47
                SubscribeSubject SequenceInfo
                -> MemberSelector(Selector=Item2.InterCommand)
                -> PropertyMapping(Value) => #50
                #47, #50 -> StringProperty(Value=Purge)
                -> MulticastSubject OlfactometerCommand => #52
                SubscribeSubject SequenceInfo
                -> MemberSelector(Selector=Item2.InterCommandTime)
                -> Bonsai.Scripting.Expressions.ExpressionTransform
                  Expression: TimeSpan.FromSeconds(it)
                -> PropertyMapping(DueTime) => #56
                #52, #56 -> Delay(DueTime=PT0.2S) => #57
                -> BooleanProperty(Value=false) => #58
                #57 -> BooleanProperty(Value=true) => #59
                StringProperty(Value=Case1) => #60
                #58, #59, #60 -> Zip => #61
                SubscribeSubject SustainedSampleOffset
                -> MemberSelector(Selector=Seconds) => #63
                SubscribeSubject InitiatingOnset
                -> MemberSelector(Selector=Seconds) => #65
                #63, #65 -> WithLatestFrom
                -> Subtract => #67
                #67, #32 -> TakeUntil => #68
                -> Condition WithinSamplingPeriod => #69
                    WorkflowInput Source1 => #0
                    SubscribeSubject Valence
                    -> MemberSelector(Selector=Value.Item1.MinimumSamplingTime)
                    -> PropertyMapping(Value) => #3
                    #0, #3 -> GreaterThanOrEqual(Operand=DoubleProperty(Value=0.001)) => #4
                    SubscribeSubject Valence
                    -> MemberSelector(Selector=Value.Item1.MaximumSamplingTime) => #6
                    SubscribeSubject SequenceInfo
                    -> MemberSelector(Selector=Item2.InterCommandTime)
                    -> PropertyMapping(Value) => #9
                    #6, #9 -> Add(Operand=DoubleProperty(Value=0.2))
                    -> PropertyMapping(Value) => #11
                    #11, #0 -> LessThan(Operand=DoubleProperty(Value=2.2)) => #12
                    #4, #12 -> Zip
                    -> BitwiseAnd
                    -> WorkflowOutput
                #61, #69 -> TakeUntil => #70
                #69 -> BooleanProperty(Value=true) => #71
                #69 -> BooleanProperty(Value=true) => #72
                StringProperty(Value=Case2) => #73
                #71, #72, #73 -> Zip => #74
                SubscribeSubject SequenceInfo
                -> MemberSelector(Selector=Item2.InterCommandTime)
                -> Bonsai.Scripting.Expressions.ExpressionTransform
                  Expression: TimeSpan.FromSeconds(it)
                -> PropertyMapping(DueTime) => #78
                #74, #78 -> Delay(DueTime=PT0.2S) => #79
                #68 -> Condition LessThanMinimum => #80
                    WorkflowInput Source1 => #0
                    SubscribeSubject Valence
                    -> MemberSelector(Selector=Value.Item1.MinimumSamplingTime)
                    -> PropertyMapping(Value) => #3
                    #0, #3 -> LessThan(Operand=DoubleProperty(Value=0.001)) => #4
                    #0 -> GreaterThanOrEqual(Operand=DoubleProperty(Value=0)) => #5
                    #4, #5 -> Zip
                    -> BitwiseAnd
                    -> WorkflowOutput
                -> BooleanProperty(Value=true) => #81
                #80 -> BooleanProperty(Value=false) => #82
                StringProperty(Value=Case3) => #83
                #81, #82, #83 -> Zip => #84
                SubscribeSubject SequenceInfo
                -> MemberSelector(Selector=Item2.InterCommandTime)
                -> Bonsai.Scripting.Expressions.ExpressionTransform
                  Expression: TimeSpan.FromSeconds(it)
                -> PropertyMapping(DueTime) => #88
                #84, #88 -> Delay(DueTime=PT0.2S) => #89
                SubscribeSubject ReinitiatingOnset => #90
                SubscribeSubject Valence => #91
                #90, #91 -> WithLatestFrom
                -> MemberSelector(Selector=Item2.Value.Item1.Command)
                -> MulticastSubject OlfactometerCommand => #94
                SubscribeSubject Valence
                -> MemberSelector(Selector=Value.Item1.MaximumSamplingTime)
                -> Bonsai.Scripting.Expressions.ExpressionTransform
                  Expression: TimeSpan.FromSeconds(it)
                -> PropertyMapping(DueTime) => #98
                #94, #98 -> Delay(DueTime=PT2S) => #99
                SubscribeSubject SequenceInfo
                -> MemberSelector(Selector=Item2.InterCommand)
                -> PropertyMapping(Value) => #102
                #99, #102 -> StringProperty(Value=Purge)
                -> MulticastSubject OlfactometerCommand => #104
                SubscribeSubject SequenceInfo
                -> MemberSelector(Selector=Item2.InterCommandTime)
                -> Bonsai.Scripting.Expressions.ExpressionTransform
                  Expression: TimeSpan.FromSeconds(it)
                -> PropertyMapping(DueTime) => #108
                #104, #108 -> Delay(DueTime=PT0.2S) => #109
                -> BooleanProperty(Value=false) => #110
                #109 -> BooleanProperty(Value=true) => #111
                StringProperty(Value=Case4) => #112
                #110, #111, #112 -> Zip => #113
                SubscribeSubject SustainedSampleOffset
                -> MemberSelector(Selector=Seconds) => #115
                SubscribeSubject ReinitiatingOnset
                -> MemberSelector(Selector=Seconds) => #117
                #115, #117 -> WithLatestFrom
                -> Subtract => #119
                -> Condition WithinSamplingPeriod => #120
                    WorkflowInput Source1 => #0
                    SubscribeSubject Valence
                    -> MemberSelector(Selector=Value.Item1.MinimumSamplingTime)
                    -> PropertyMapping(Value) => #3
                    #0, #3 -> GreaterThanOrEqual(Operand=DoubleProperty(Value=0.001)) => #4
                    SubscribeSubject Valence
                    -> MemberSelector(Selector=Value.Item1.MaximumSamplingTime) => #6
                    SubscribeSubject SequenceInfo
                    -> MemberSelector(Selector=Item2.InterCommandTime)
                    -> PropertyMapping(Value) => #9
                    #6, #9 -> Add(Operand=DoubleProperty(Value=0.2))
                    -> PropertyMapping(Value) => #11
                    #11, #0 -> LessThan(Operand=DoubleProperty(Value=2.2)) => #12
                    #4, #12 -> Zip
                    -> BitwiseAnd
                    -> WorkflowOutput
                #113, #120 -> TakeUntil => #121
                #120 -> BooleanProperty(Value=true) => #122
                #120 -> BooleanProperty(Value=true) => #123
                StringProperty(Value=Case5) => #124
                #122, #123, #124 -> Zip => #125
                SubscribeSubject SequenceInfo
                -> MemberSelector(Selector=Item2.InterCommandTime)
                -> Bonsai.Scripting.Expressions.ExpressionTransform
                  Expression: TimeSpan.FromSeconds(it)
                -> PropertyMapping(DueTime) => #129
                #125, #129 -> Delay(DueTime=PT0.2S) => #130
                #119 -> Condition LessThanMinimum => #131
                    WorkflowInput Source1 => #0
                    SubscribeSubject Valence
                    -> MemberSelector(Selector=Value.Item1.MinimumSamplingTime)
                    -> PropertyMapping(Value) => #3
                    #0, #3 -> LessThan(Operand=DoubleProperty(Value=0.001)) => #4
                    #0 -> GreaterThanOrEqual(Operand=DoubleProperty(Value=0)) => #5
                    #4, #5 -> Zip
                    -> BitwiseAnd
                    -> WorkflowOutput
                -> BooleanProperty(Value=true) => #132
                #131 -> BooleanProperty(Value=false) => #133
                StringProperty(Value=Case6) => #134
                #132, #133, #134 -> Zip => #135
                SubscribeSubject SequenceInfo
                -> MemberSelector(Selector=Item2.InterCommandTime)
                -> Bonsai.Scripting.Expressions.ExpressionTransform
                  Expression: TimeSpan.FromSeconds(it)
                -> PropertyMapping(DueTime) => #139
                #135, #139 -> Delay(DueTime=PT0.2S) => #140
                SubscribeSubject ProtocolSettings
                -> MemberSelector(Selector=MaximumInterOdourPokeTime)
                -> Bonsai.Scripting.Expressions.ExpressionTransform
                  Expression: TimeSpan.FromSeconds(it)
                -> PropertyMapping(DueTime)
                -> Timer(DueTime=PT5S) => #145
                SubscribeSubject CommandsO1 => #146
                #145, #146 -> SubscribeWhen => #147
                SubscribeSubject SustainedSampleState => #148
                #147, #148 -> WithLatestFrom => #149
                #149, #69 -> TakeUntil => #150
                #150, #120 -> TakeUntil
                -> Condition FailedToSample => #152
                    WorkflowInput Source1
                    -> MemberSelector(Selector=Item2)
                    -> MemberSelector(Selector=Value)
                    -> BitwiseNot => #3
                    SubscribeSubject Valence
                    -> MemberSelector(Selector=Index)
                    -> GreaterThan(Operand=IntProperty(Value=0)) => #6
                    #3, #6 -> Zip
                    -> BitwiseAnd
                    -> WorkflowOutput
                -> BooleanProperty(Value=true) => #153
                #152 -> BooleanProperty(Value=false) => #154
                StringProperty(Value=Case7) => #155
                #153, #154, #155 -> Zip => #156
                SubscribeSubject RewardPort1 => #157
                SubscribeSubject RewardPort0 => #158
                #157, #158 -> Merge => #159
                -> BooleanProperty(Value=true) => #160
                #159 -> BooleanProperty(Value=false) => #161
                StringProperty(Value=Case8) => #162
                #160, #161, #162 -> Zip => #163
                #70, #79, #89, #121, #130, #140, #156, #163 -> Merge => #164
                -> Take(Count=1) => #165
                SubscribeSubject RawValence => #166
                #165, #166 -> WithLatestFrom
                -> WorkflowOutput
                #164 -> BehaviorSubject Result
                SubscribeSubject SequenceInfo
                -> MemberSelector(Selector=Item2.InterCommand)
                -> PropertyMapping(Value) => #172
                #32, #172 -> StringProperty(Value=Purge)
                -> MulticastSubject OlfactometerCommand
                SubscribeSubject SequenceInfo
                -> MemberSelector(Selector=Item2.InterCommand)
                -> PropertyMapping(Value) => #177
                #74, #177 -> StringProperty(Value=Purge)
                -> MulticastSubject OlfactometerCommand
                SubscribeSubject SequenceInfo
                -> MemberSelector(Selector=Item2.InterCommand)
                -> PropertyMapping(Value) => #182
                #125, #182 -> StringProperty(Value=Purge)
                -> MulticastSubject OlfactometerCommand
                SubscribeSubject SequenceInfo
                -> MemberSelector(Selector=Item2.InterCommand)
                -> PropertyMapping(Value) => #187
                #84, #187 -> StringProperty(Value=Purge)
                -> MulticastSubject OlfactometerCommand
                SubscribeSubject SequenceInfo
                -> MemberSelector(Selector=Item2.InterCommand)
                -> PropertyMapping(Value) => #192
                #135, #192 -> StringProperty(Value=Purge)
                -> MulticastSubject OlfactometerCommand
            -> Concat => #21
            -> Last
            -> Condition SequenceCompleteCheck
                WorkflowInput Source1 => #0
                -> MemberSelector(Selector=Item1.Item2) => #1
                #0 -> MemberSelector(Selector=Item2.Item1.Index) => #2
                SubscribeSubject SequenceInfo
                -> MemberSelector(Selector=Item2.SequenceLengthIndex) => #4
                #2, #4 -> WithLatestFrom
                -> Subtract
                -> Equal(Operand=IntProperty(Value=0)) => #7
                #1, #7 -> Zip
                -> BitwiseAnd
                -> WorkflowOutput
            -> BehaviorSubject SequenceComplete => #24
            #21, #24 -> Merge
            -> BehaviorSubject PresentationResult => #26
            -> Condition IsIncomplete => #27
                WorkflowInput Source1
                -> MemberSelector(Selector=Item1.Item2)
                -> BitwiseNot
                -> WorkflowOutput
            #26, #27 -> TakeUntil => #28
            SubscribeSubject SequenceInfo
            -> Sink EnableTrialStartIndicator => #30
                WorkflowInput Source1
                -> MemberSelector(Selector=Item2.EnableTrialStartIndicator)
                -> Condition
                    WorkflowInput Source1
                    -> WorkflowOutput
                -> Harp.Behavior.CreateMessage(MessageType=Write, Payload=Harp.Behavior.CreateOutputSetPayload(OutputSet=DOPort0))
                -> MulticastSubject BehaviorCommands
                -> WorkflowOutput
            #28, #30 -> WithLatestFrom
            -> Repeat

            SubscribeSubject PresentationResult
            -> MemberSelector(Selector=Item2.Item1.Index)
            -> Equal(Operand=IntProperty(Value=0))
            -> BitwiseNot => #36
            SubscribeSubject PresentationResult => #37
            -> MemberSelector(Selector=Item1.Item1) => #38
            #37 -> MemberSelector(Selector=Item1.Item2)
            -> BitwiseNot => #40
            #38, #40 -> Zip
            -> BitwiseAnd => #42
            #36, #42 -> Zip
            -> BitwiseAnd => #44
            SubscribeSubject SequenceInfo
            -> MemberSelector(Selector=Item2.CompletionRequiresEngagement)
            -> BitwiseNot => #47
            #44, #47 -> WithLatestFrom
            -> BitwiseAnd
            -> Condition CompletionConditionsMet => #50
                WorkflowInput Source1
                -> WorkflowOutput
            SubscribeSubject PresentationResult => #51
            #50, #51 -> WithLatestFrom
            -> MemberSelector(Selector=Item2) => #53
            SubscribeSubject SequenceInfo
            -> MemberSelector(Selector=Item2) => #55
            #53, #55 -> WithLatestFrom
            -> Bonsai.Scripting.Expressions.ExpressionTransform => #57
              Expression:
                new (
                it.Item1.Item2 as RewardInfo,
                it.Item2 as Sequence,
                it.Item1.Item1.Item2 as TrialComplete
                )
            SubscribeSubject SequenceComplete
            -> MemberSelector(Selector=Item2) => #59
            SubscribeSubject SequenceInfo
            -> MemberSelector(Selector=Item2) => #61
            #59, #61 -> WithLatestFrom => #62
            BooleanProperty(Value=true) => #63
            #62, #63 -> WithLatestFrom
            -> Bonsai.Scripting.Expressions.ExpressionTransform => #65
              Expression:
                new (
                it.Item1.Item1 as RewardInfo,
                it.Item1.Item2 as Sequence,
                it.Item2 as TrialComplete
                )
            SubscribeSubject DetectedObject => #66
            SubscribeSubject PresentationResult
            -> MemberSelector(Selector=Item2.Item1.Index) => #68
            SubscribeSubject SequenceInfo
            -> MemberSelector(Selector=Item2.SequenceLengthIndex)
            -> PropertyMapping(Value) => #71
            #68, #71 -> Equal(Operand=IntProperty(Value=4))
            -> BitwiseNot => #73
            #66, #73 -> WithLatestFrom
            -> BitwiseAnd => #75
            SubscribeSubject PresentationResult
            -> MemberSelector(Selector=Item1.Item2) => #77
            SubscribeSubject PresentationResult
            -> MemberSelector(Selector=Item2.Item1.Rewarded) => #79
            #77, #79 -> Zip
            -> BitwiseAnd => #81
            #75, #81 -> WithLatestFrom
            -> BitwiseAnd
            -> Condition MidsequenceCompletionConditionsMet => #84
                WorkflowInput Source1
                -> WorkflowOutput
            SubscribeSubject PresentationResult => #85
            #84, #85 -> WithLatestFrom
            -> MemberSelector(Selector=Item2.Item2) => #87
            SubscribeSubject SequenceInfo
            -> MemberSelector(Selector=Item2) => #89
            #87, #89 -> WithLatestFrom => #90
            BooleanProperty(Value=true) => #91
            #90, #91 -> WithLatestFrom
            -> Bonsai.Scripting.Expressions.ExpressionTransform => #93
              Expression:
                new (
                it.Item1.Item1 as RewardInfo,
                it.Item1.Item2 as Sequence,
                it.Item2 as TrialComplete
                )
            #57, #65, #93 -> Merge => #94
            -> IncludeWorkflow BehaviorEvents(Path=Bonsai.Harp:WithLatestTimestamp.bonsai)
            -> MemberSelector(Selector=Seconds) => #96
            SubscribeSubject SustainedSampleOffset
            -> Condition
                WorkflowInput Source1
                -> MemberSelector(Selector=Value)
                -> BitwiseNot
                -> WorkflowOutput
            -> MemberSelector(Selector=Seconds) => #99
            #96, #99 -> WithLatestFrom => #100
            StringProperty(Value=Case1)
            -> PropertyMapping(Value) => #102
            SubscribeSubject SequenceComplete
            -> MemberSelector(Selector=Item1.Item3) => #104
            #102, #104 -> Equal(Operand=StringProperty(Value=Case1)) => #105
            StringProperty(Value=Case4)
            -> PropertyMapping(Value) => #107
            #104, #107 -> Equal(Operand=StringProperty(Value=Case4)) => #108
            #105, #108 -> Merge
            -> Condition => #110
                WorkflowInput Source1
                -> WorkflowOutput
            #100, #110 -> TakeUntil
            -> Subtract => #112
            #94 -> IncludeWorkflow BehaviorEvents(Path=Bonsai.Harp:WithLatestTimestamp.bonsai)
            -> MemberSelector(Selector=Seconds) => #114
            #110 -> IncludeWorkflow BehaviorEvents(Path=Bonsai.Harp:WithLatestTimestamp.bonsai)
            -> MemberSelector(Selector=Seconds) => #116
            #114, #116 -> WithLatestFrom
            -> Subtract => #118
            #112, #118 -> Merge => #119
            #119, #94 -> WithLatestFrom => #120
            DoubleProperty(Value=0) => #121
            SubscribeSubject SequenceInfo => #122
            -> Condition SkipSampling
                WorkflowInput Source1
                -> MemberSelector(Selector=Item2.SkipSampling)
                -> WorkflowOutput
            -> MemberSelector(Selector=Item2.RewardConditions) => #124
            #122 -> MemberSelector(Selector=Item1)
            -> PropertyMapping(Value) => #126
            #124, #126 -> Index(Operand=IntProperty(Value=0)) => #127
            -> SequenceSchema.Valence(Rewarded=true, MinimumSamplingTime=0, MaximumSamplingTime=0, Index=0) => #128
            #127 -> MemberSelector(Selector=Position) => #129
            #128, #129 -> Zip => #130
            SubscribeSubject SequenceInfo
            -> MemberSelector(Selector=Item2) => #132
            #130, #132 -> WithLatestFrom => #133
            BooleanProperty(Value=true) => #134
            #133, #134 -> WithLatestFrom
            -> Bonsai.Scripting.Expressions.ExpressionTransform => #136
              Expression:
                new (
                it.Item1.Item1 as RewardInfo,
                it.Item1.Item2 as Sequence,
                it.Item2 as TrialComplete
                )
            #121, #136 -> WithLatestFrom => #137
            #120, #137 -> Merge
            -> Take(Count=1)
            -> WorkflowOutput

            SubscribeSubject SustainedSampleState
            -> Condition => #142
                WorkflowInput Source1
                -> MemberSelector(Selector=Value)
                -> WorkflowOutput
            SubscribeSubject SequenceInfo
            -> MemberSelector(Selector=Item2.EnableTrialStartIndicator)
            -> Condition => #145
                WorkflowInput Source1
                -> WorkflowOutput
            #142, #145 -> WithLatestFrom
            -> BooleanProperty(Value=true)
            -> Harp.Behavior.CreateMessage(MessageType=Write, Payload=Harp.Behavior.CreateOutputClearPayload(OutputClear=DOPort0))
            -> MulticastSubject BehaviorCommands

            SubscribeSubject SequenceInfo
            -> MemberSelector(Selector=Item2.enableTrialEndIndicator)
            -> Condition
                WorkflowInput Source1
                -> WorkflowOutput
            -> Harp.Behavior.CreateMessage(MessageType=Write, Payload=Harp.Behavior.CreateOutputSetPayload(OutputSet=DOPort0))
            -> MulticastSubject BehaviorCommands
        -> SelectMany EndInitiation => #9
            WorkflowInput Source1
            -> MemberSelector(Selector=Item2) => #1
            -> StringProperty(Value=EndInitiation)
            -> MulticastSubject ExperimentEvents
            -> StringProperty(Value=Purge)
            -> MulticastSubject OlfactometerCommand
            -> Harp.Behavior.CreateMessage(MessageType=Write, Payload=Harp.Behavior.CreateOutputClearPayload(OutputClear=DOPort0))
            -> MulticastSubject BehaviorCommands => #7
            #7, #1 -> Zip
            -> MemberSelector(Selector=Item2)
            -> Take(Count=1)
            -> WorkflowOutput
        -> Condition TrialValid
            WorkflowInput Source1
            -> MemberSelector(Selector=TrialComplete)
            -> WorkflowOutput
        -> SelectMany ActivateReward
            WorkflowInput Source1 => #0
            -> Condition RewardIndicatorsEnabled => #1
                WorkflowInput Source1
                -> MemberSelector(Selector=Sequence.EnableRewardLocationIndicator)
                -> Equal(Operand=StringProperty(Value=Rewarded))
                -> WorkflowOutput
            -> Condition R1
                WorkflowInput Source1
                -> MemberSelector(Selector=RewardInfo.Item2)
                -> Equal(Operand=IntProperty(Value=0))
                -> WorkflowOutput
            -> Harp.Behavior.CreateMessage(MessageType=Write, Payload=Harp.Behavior.CreateOutputSetPayload(OutputSet=DOPort1))
            -> MulticastSubject BehaviorCommands => #4
            #1 -> Condition R2
                WorkflowInput Source1
                -> MemberSelector(Selector=RewardInfo.Item2)
                -> Equal(Operand=IntProperty(Value=1))
                -> WorkflowOutput
            -> Harp.Behavior.CreateMessage(MessageType=Write, Payload=Harp.Behavior.CreateOutputSetPayload(OutputSet=DOPort2))
            -> MulticastSubject BehaviorCommands => #7
            #4, #7 -> Merge
            -> BooleanProperty(Value=true) => #9
            #9, #1 -> Zip => #10
            #0 -> Condition RewardIndicatorsDisabled => #11
                WorkflowInput Source1
                -> MemberSelector(Selector=Sequence.EnableRewardLocationIndicator)
                -> Equal(Operand=StringProperty(Value=None))
                -> WorkflowOutput
            -> BooleanProperty(Value=false) => #12
            #12, #11 -> Zip => #13
            #0 -> Condition BothRewardPortsEnabled => #14
                WorkflowInput Source1
                -> MemberSelector(Selector=Sequence.EnableRewardLocationIndicator)
                -> Equal(Operand=StringProperty(Value=Both))
                -> WorkflowOutput
            -> Harp.Behavior.CreateMessage(MessageType=Write, Payload=Harp.Behavior.CreateOutputSetPayload(OutputSet=DOPort1))
            -> MulticastSubject BehaviorCommands => #16
            #14 -> Harp.Behavior.CreateMessage(MessageType=Write, Payload=Harp.Behavior.CreateOutputSetPayload(OutputSet=DOPort2))
            -> MulticastSubject BehaviorCommands => #18
            #16, #18 -> Merge
            -> BooleanProperty(Value=true) => #20
            #20, #14 -> Zip => #21
            #10, #13, #21 -> Merge
            -> Take(Count=1)
            -> MemberSelector(Selector=Item2)
            -> WorkflowOutput
            #1 -> StringProperty(Value=ActivateReward)
            -> MulticastSubject ExperimentEvents
        -> SelectMany AwaitReward
            WorkflowInput Source1
            -> Take(Count=1)
            -> AsyncSubject RewardInfo
            -> StringProperty(Value=AwaitReward)
            -> MulticastSubject ExperimentEvents

            SubscribeSubject RewardPort0 => #5
            SubscribeSubject RewardInfo => #6
            #5, #6 -> WithLatestFrom => #7
            -> Condition R1 => #8
                WorkflowInput Source1
                -> MemberSelector(Selector=Item2.RewardInfo.Item2)
                -> Equal(Operand=IntProperty(Value=0))
                -> WorkflowOutput
            SubscribeSubject SessionSettings
            -> MemberSelector(Selector=Metadata.RewardTime) => #10
            SubscribeSubject ProtocolSettings
            -> MemberSelector(Selector=RewardVolume)
            -> PropertyMapping(Value) => #13
            #10, #13 -> Multiply(Operand=DoubleProperty(Value=16))
            -> PropertyMapping(RewardTime) => #15
            #8, #15 -> DataSchema.RewardCommand(RewardTime=0.238, RewardPosition=0)
            -> MulticastSubject RewardCommand
            -> BooleanProperty(Value=true) => #18
            #7 -> Condition R2
                WorkflowInput Source1
                -> MemberSelector(Selector=Item2.RewardInfo.Item2)
                -> Equal(Operand=IntProperty(Value=1))
                -> WorkflowOutput
            -> Condition MaxAttempts
                WorkflowInput Source1 => #0
                SubscribeSubject Attempts => #1
                #0, #1 -> WithLatestFrom
                -> MemberSelector(Selector=Item2) => #3
                SubscribeSubject RewardInfo
                -> MemberSelector(Selector=Sequence.RewardAttempts) => #5
                #3, #5 -> Zip
                -> GreaterThanOrEqual
                -> WorkflowOutput
            -> BooleanProperty(Value=false) => #21
            SubscribeSubject RewardPort1 => #22
            SubscribeSubject RewardInfo => #23
            #22, #23 -> WithLatestFrom => #24
            -> Condition R2 => #25
                WorkflowInput Source1
                -> MemberSelector(Selector=Item2.RewardInfo.Item2)
                -> Equal(Operand=IntProperty(Value=1))
                -> WorkflowOutput
            SubscribeSubject SessionSettings
            -> MemberSelector(Selector=Metadata.RewardTime) => #27
            SubscribeSubject ProtocolSettings
            -> MemberSelector(Selector=RewardVolume)
            -> PropertyMapping(Value) => #30
            #27, #30 -> Multiply(Operand=DoubleProperty(Value=16))
            -> PropertyMapping(RewardTime) => #32
            #25, #32 -> DataSchema.RewardCommand(RewardTime=0.238, RewardPosition=1)
            -> MulticastSubject RewardCommand
            -> BooleanProperty(Value=true) => #35
            #24 -> Condition R1
                WorkflowInput Source1
                -> MemberSelector(Selector=Item2.RewardInfo.Item2)
                -> Equal(Operand=IntProperty(Value=0))
                -> WorkflowOutput
            -> Condition MaxAttempts
                WorkflowInput Source1 => #0
                SubscribeSubject Attempts => #1
                #0, #1 -> WithLatestFrom
                -> MemberSelector(Selector=Item2) => #3
                SubscribeSubject RewardInfo
                -> MemberSelector(Selector=Sequence.RewardAttempts) => #5
                #3, #5 -> Zip
                -> GreaterThanOrEqual
                -> WorkflowOutput
            -> BooleanProperty(Value=false) => #38
            SubscribeSubject RewardInfo
            -> MemberSelector(Selector=RewardInfo.Item1)
            -> NullOrUnrewarded
            -> Condition NoReward
                WorkflowInput Source1
                -> WorkflowOutput
            -> BooleanProperty(Value=false) => #43
            SubscribeSubject RewardInfo
            -> MemberSelector(Selector=Sequence.ResponseTime) => #45
            SubscribeSubject InitiationSequenceTime
            -> PropertyMapping(Value) => #47
            #45, #47 -> Subtract(Operand=DoubleProperty(Value=2.2750400002114475))
            -> Bonsai.Scripting.Expressions.ExpressionTransform
              Expression: TimeSpan.FromSeconds(it)
            -> PropertyMapping(DueTime)
            -> Timer(DueTime=PT2.725S)
            -> BooleanProperty(Value=false) => #52
            SubscribeSubject SustainedSampleOnset => #53
            SubscribeSubject RewardInfo
            -> MemberSelector(Selector=Sequence.RewardAvailablePokeReset) => #55
            #53, #55 -> Zip
            -> Condition RewardPokeTrial
                WorkflowInput Source1
                -> MemberSelector(Selector=Item2)
                -> WorkflowOutput
            -> BooleanProperty(Value=false) => #58
            #18, #21, #35, #38, #43, #52, #58 -> Merge => #59
            SubscribeSubject RewardInfo
            -> MemberSelector(Selector=Sequence) => #61
            #59, #61 -> Zip
            -> Take(Count=1)
            -> WorkflowOutput

            SubscribeSubject RewardPort0 => #65
            SubscribeSubject RewardPort1 => #66
            #65, #66 -> Merge
            -> IntProperty(Value=1)
            -> Accumulate => #69
            IntProperty(Value=0) => #70
            #69, #70 -> Merge
            -> BehaviorSubject Attempts
        -> Sink UpdatePerformance => #13
            WorkflowInput Source1
            -> MemberSelector(Selector=Item1)
            -> MulticastSubject TrialCorrectResult
            -> WorkflowOutput
        #9 -> Condition TrialInvalid
            WorkflowInput Source1
            -> MemberSelector(Selector=TrialComplete)
            -> BitwiseNot
            -> WorkflowOutput
        -> MemberSelector(Selector="TrialComplete,Sequence")
        -> Take(Count=1)
        -> Sink UpdatePerformance => #17
            WorkflowInput Source1
            -> MemberSelector(Selector=Item1)
            -> MulticastSubject TrialCorrectResult
            -> WorkflowOutput
        #13, #17 -> Merge
        -> MemberSelector(Selector=Item2)
        -> SelectMany Reset
            WorkflowInput Source1
            -> Take(Count=1)
            -> AsyncSubject SequenceInfo

            SubscribeSubject SequenceInfo
            -> StringProperty(Value=Reset)
            -> MulticastSubject ExperimentEvents
            -> Harp.Behavior.CreateMessage(MessageType=Write, Payload=Harp.Behavior.CreateOutputClearPayload(OutputClear="DOPort0 DOPort1 DOPort2"))
            -> MulticastSubject BehaviorCommands
            -> StringProperty(Value=Zero)
            -> MulticastSubject OlfactometerCommand => #9
            SubscribeSubject SequenceInfo
            -> MemberSelector(Selector=InterTrialInterval)
            -> Bonsai.Scripting.Expressions.ExpressionTransform
              Expression: TimeSpan.FromSeconds(it)
            -> PropertyMapping(DueTime) => #13
            #9, #13 -> Delay(DueTime=PT3S)
            -> StringProperty(Value=Default)
            -> MulticastSubject OlfactometerCommand
            -> Take(Count=1)
            -> WorkflowOutput
        -> Take(Count=1)
        -> WorkflowOutput
        #8 -> MemberSelector(Selector=Item1)
        -> BehaviorSubject InitiationSequenceTime
    -> Concat
    -> Repeat

    GroupWorkflow PerformanceAssessor
        SubscribeSubject PerformanceAverage => #0
        SubscribeSubject CurrentSequences => #1
        #0, #1 -> WithLatestFrom
        -> Condition CriterionMet
            WorkflowInput Source1 => #0
            -> MemberSelector(Selector=Item1.Val0) => #1
            #0 -> MemberSelector(Selector=Item2.PerformaceCriterion) => #2
            #1, #2 -> Zip
            -> GreaterThanOrEqual
            -> WorkflowOutput
        -> MemberSelector(Selector=Item2.NextSequence)
        -> MulticastSubject LoadNewSequence

        BehaviorSubject<System.Boolean> TrialCorrectResult
        -> Bonsai.Scripting.Expressions.ExpressionTransform => #7
          Expression: Convert.ToInt32(it)
        SubscribeSubject ProtocolSettings
        -> MemberSelector(Selector=PerformanceAverageWindow)
        -> PropertyMapping(Count) => #10
        #7, #10 -> Bonsai.Dsp.Buffer(Count=5, Skip=1)
        -> Bonsai.Dsp.Average => #12
        SubscribeSubject CurrentSequences
        -> Skip(Count=1) => #14
        #12, #14 -> TakeUntil
        -> Repeat
        -> BehaviorSubject PerformanceAverage

    GroupWorkflow RewardCounter
        SubscribeSubject RewardCommand => #0
        -> Condition R1
            WorkflowInput Source1
            -> MemberSelector(Selector=RewardPosition)
            -> Equal(Operand=IntProperty(Value=0))
            -> WorkflowOutput
        -> IntProperty(Value=1) => #2
        IntProperty(Value=0) => #3
        #2, #3 -> Merge
        -> Accumulate => #5
        #0 -> Condition R2
            WorkflowInput Source1
            -> MemberSelector(Selector=RewardPosition)
            -> Equal(Operand=IntProperty(Value=1))
            -> WorkflowOutput
        -> IntProperty(Value=1) => #7
        #7, #3 -> Merge
        -> Accumulate => #9
        #5, #9 -> CombineLatest
        -> Format(Format="R1: {0}, R2: {1}", Selector="Item1,Item2")
        -> BehaviorSubject RewardCounter

    GroupWorkflow SustainedPokes
        SubscribeSubject SampleOnset => #0
        -> BooleanProperty(Value=true) => #1
        #0 -> MemberSelector(Selector=Seconds) => #2
        #1, #2 -> Zip
        -> Bonsai.Harp.CreateTimestamped => #4
        SubscribeSubject SampleOffset => #5
        -> BooleanProperty(Value=false) => #6
        #5 -> MemberSelector(Selector=Seconds) => #7
        #6, #7 -> Zip
        -> Bonsai.Harp.CreateTimestamped => #9
        #4, #9 -> Merge
        -> RateLimiter(MessageDelay=PT0.005S) => #11
        SubscribeSubject SessionSettings
        -> MemberSelector(Selector=Metadata.MinimumSampleTime)
        -> Bonsai.Scripting.Expressions.ExpressionTransform
          Expression: TimeSpan.FromSeconds(it)
        -> PropertyMapping(DueTime) => #15
        #11, #15 -> Throttle(DueTime=PT0.05S)
        -> Condition
            WorkflowInput Source1
            -> MemberSelector(Selector=Value)
            -> WorkflowOutput
        -> PublishSubject SustainedSampleOnset
        SubscribeSubject ProtocolSettings
        -> MemberSelector(Selector=SampleOffsetTime)
        -> Bonsai.Scripting.Expressions.ExpressionTransform
          Expression: TimeSpan.FromSeconds(it)
        -> PropertyMapping(DueTime) => #22
        #11, #22 -> Throttle(DueTime=PT0.5S)
        -> Condition
            WorkflowInput Source1
            -> MemberSelector(Selector=Value)
            -> BitwiseNot
            -> WorkflowOutput
        -> PublishSubject SustainedSampleOffset

        SubscribeSubject SustainedSampleOnset => #26
        SubscribeSubject SustainedSampleOffset => #27
        BooleanProperty(Value=false)
        -> IncludeWorkflow BehaviorEvents(Path=Bonsai.Harp:WithLatestTimestamp.bonsai) => #29
        #26, #27, #29 -> Merge
        -> BehaviorSubject SustainedSampleState

GroupWorkflow PulseSupplyControl
    SubscribeSubject SessionSettings
    -> MemberSelector(Selector=ShortcutKeys.Pulse1Key)
    -> PropertyMapping(Value)
    -> StringProperty(Value=Ctrl+3)
    -> StringToKey
    -> PropertyMapping(Filter)
    -> Bonsai.Windows.Input.KeyDown(Filter="LButton RButton Cancel ShiftKey ControlKey Menu Pause Space Prior PageUp Next PageDown End D0 D1 D2 D3 Control", SuppressRepetitions=false)
    -> Condition => #7
        WorkflowInput Source1 => #0
        SubscribeSubject StartDelay
        -> PropertyMapping(Value) => #2
        #0, #2 -> BooleanProperty(Value=true)
        -> WorkflowOutput
    Bonsai.Windows.Input.KeyDown
      Filter="LButton MButton XButton1 ShiftKey ControlKey Capital CapsLock KanaMode HanguelMode HangulMode Space Prior PageUp Home Left D0 D1 D4 D5 Control"
      SuppressRepetitions=false
    -> IntProperty(Value=5000) => #9
    Bonsai.Windows.Input.KeyDown(Filter="RButton MButton XButton2 ShiftKey Menu Capital CapsLock Space Next PageDown Home Up D0 D2 D4 D6 Control", SuppressRepetitions=false)
    -> IntProperty(Value=1000) => #11
    #9, #11 -> Merge
    -> PropertyMapping(PulseSupplyPort1) => #13
    #7, #13 -> Harp.Behavior.CreateMessage(MessageType=Write, Payload=Harp.Behavior.CreatePulseSupplyPort1Payload(PulseSupplyPort1=1000))
    -> MulticastSubject BehaviorCommands
    -> Harp.Behavior.CreateMessage(MessageType=Write, Payload=Harp.Behavior.CreateOutputSetPayload(OutputSet=SupplyPort1))
    -> MulticastSubject BehaviorCommands

    SubscribeSubject SessionSettings
    -> MemberSelector(Selector=ShortcutKeys.Pulse2Key)
    -> PropertyMapping(Value)
    -> StringProperty(Value=Ctrl+4)
    -> StringToKey
    -> PropertyMapping(Filter)
    -> Bonsai.Windows.Input.KeyDown(Filter="MButton ShiftKey Capital CapsLock Space Home D0 D4 Control", SuppressRepetitions=false)
    -> Condition => #25
        WorkflowInput Source1 => #0
        SubscribeSubject StartDelay
        -> PropertyMapping(Value) => #2
        #0, #2 -> BooleanProperty(Value=true)
        -> WorkflowOutput
    Bonsai.Windows.Input.KeyDown
      Filter="LButton MButton XButton1 ShiftKey ControlKey Capital CapsLock KanaMode HanguelMode HangulMode Space Prior PageUp Home Left D0 D1 D4 D5 Control"
      SuppressRepetitions=false
    -> IntProperty(Value=5000) => #27
    Bonsai.Windows.Input.KeyDown(Filter="RButton MButton XButton2 ShiftKey Menu Capital CapsLock Space Next PageDown Home Up D0 D2 D4 D6 Control", SuppressRepetitions=false)
    -> IntProperty(Value=1000) => #29
    #27, #29 -> Merge
    -> PropertyMapping(PulseSupplyPort2) => #31
    #25, #31 -> Harp.Behavior.CreateMessage(MessageType=Write, Payload=Harp.Behavior.CreatePulseSupplyPort2Payload(PulseSupplyPort2=1000))
    -> MulticastSubject BehaviorCommands
    -> Harp.Behavior.CreateMessage(MessageType=Write, Payload=Harp.Behavior.CreateOutputSetPayload(OutputSet=SupplyPort2))
    -> MulticastSubject BehaviorCommands

ExternalizedMapping(SessionSettingsPath)
-> GroupWorkflow Initialisation
    BooleanProperty(Value=true)
    -> Delay(DueTime=PT1S)
    -> BehaviorSubject StartDelay

    Bonsai.Numerics.CreateRandom(Seed=nil)
    -> BehaviorSubject RandomSource

    StringProperty(Value=Start)
    -> BehaviorSubject ExperimentEvents

    ExternalizedMapping(Path(DisplayName=SessionSettingsPath))
    -> LoadSessionSettings(Path=Schemas\rig1-session-settings.yml)
    -> Take(Count=1)
    -> AsyncSubject SessionSettings

    SubscribeSubject CurrentSequences
    -> Take(Count=1)
    -> MemberSelector(Selector=Sequences)
    -> Merge
    -> UniformSampleList
    -> AsyncSubject ProtocolSettings

    SubscribeSubject SessionSettings
    -> MemberSelector(Selector=Metadata.InitialSequence) => #18
    BehaviorSubject<System.String> LoadNewSequence => #19
    #18, #19 -> Merge
    -> SelectMany LoadSequence
        WorkflowInput Source1
        -> Take(Count=1)
        -> AsyncSubject Path

        SubscribeSubject Path
        -> PropertyMapping(Path)
        -> SequenceSelector(Path=Schemas/hiddenrule-location1-option6.yml)
        -> Take(Count=1)
        -> WorkflowOutput
    -> BehaviorSubject CurrentSequences

SubscribeSubject CameraStream
-> MemberSelector(Selector=Value.Image)

SubscribeSubject ExperimentEvents
SubscribeSubject OlfactometerCommand
SubscribeSubject RewardCounter

GroupWorkflow EndSessionCommands
    SubscribeSubject SessionSettings
    -> MemberSelector(Selector=ShortcutKeys.EndSessionKey)
    -> PropertyMapping(Value)
    -> StringProperty(Value=Ctrl+1)
    -> StringToKey
    -> PropertyMapping(Filter)
    -> Bonsai.Windows.Input.KeyDown(Filter="LButton ShiftKey ControlKey Space Prior PageUp D0 D1 Control", SuppressRepetitions=false)
    -> Delay(DueTime=PT1S)
    -> Harp.Olfactometer.CreateMessage(MessageType=Write, Payload=Harp.Olfactometer.CreateEnableFlowPayload(EnableFlow=Disabled))
    -> MulticastSubject CommandsO0
    -> Harp.Olfactometer.CreateMessage(MessageType=Write, Payload=Harp.Olfactometer.CreateEnableFlowPayload(EnableFlow=Disabled))
    -> MulticastSubject CommandsO1
    -> Harp.Behavior.CreateMessage(MessageType=Write, Payload=Harp.Behavior.CreateOutputClearPayload(OutputClear="DOPort0 DOPort1 DOPort2"))
    -> MulticastSubject BehaviorCommands
    -> StringProperty(Value=Default)
    -> MulticastSubject OlfactometerCommand => #15
    SubscribeSubject RewardCommand => #16
    -> Condition R1
        WorkflowInput Source1
        -> MemberSelector(Selector=RewardPosition)
        -> Equal(Operand=IntProperty(Value=0))
        -> WorkflowOutput
    -> IntProperty(Value=1) => #18
    #16 -> Condition R2
        WorkflowInput Source1
        -> MemberSelector(Selector=RewardPosition)
        -> Equal(Operand=IntProperty(Value=1))
        -> WorkflowOutput
    -> IntProperty(Value=1) => #20
    #18, #20 -> Merge
    -> Accumulate => #22
    SubscribeSubject SessionSettings
    -> MemberSelector(Selector=Metadata.MaximumRewardsAvailable)
    -> PropertyMapping(Value) => #25
    #22, #25 -> Equal(Operand=IntProperty(Value=100))
    -> Condition
        WorkflowInput Source1
        -> WorkflowOutput
    -> Delay(DueTime=PT1S)
    -> Harp.Olfactometer.CreateMessage(MessageType=Write, Payload=Harp.Olfactometer.CreateEnableFlowPayload(EnableFlow=Disabled))
    -> MulticastSubject CommandsO0
    -> Harp.Olfactometer.CreateMessage(MessageType=Write, Payload=Harp.Olfactometer.CreateEnableFlowPayload(EnableFlow=Disabled))
    -> MulticastSubject CommandsO1
    -> Harp.Behavior.CreateMessage(MessageType=Write, Payload=Harp.Behavior.CreateOutputClearPayload(OutputClear="DOPort0 DOPort1 DOPort2"))
    -> MulticastSubject BehaviorCommands
    -> StringProperty(Value=Default)
    -> MulticastSubject OlfactometerCommand => #36
    #15, #36 -> Merge
    -> Take(Count=1)
-> WorkflowOutput
